"macro go"
" B12T V0.2 "

$pseq=systemdir+'/psglib/'+seqfil
exists($pseq,'file'):$e
if ($e) then
  if ($# = 1) then
    go2($0,$1)
  else
    go2($0)
  endif
  return
endif

on('execprep'):$ex
if ($ex < -0.5) then
  " Run generalized go macro 'usergo' if it exists "
  exists('usergo','maclib'):$ex
  if ($ex)  then  usergo  endif
  " Run sequence specific macro 'go_<seqfil>' if it exists "
  $macro = 'go_'+seqfil
  exists($macro,'maclib'):$ex
  if ($ex)  then  {$macro}  endif
endif
il='n'

// Parse input
$args = $0
$i = 0
while ($i<$#) do
   $i = $i + 1
   $args = $args+'\',\''+${$i}
endwhile
$args = 'Acq(\'' + $args + '\')'

$c1=0
$args = $args+':$c1'
exec($args):$e
if ($##>0.5) then
  return($c1)
endif

